'For programming tips, copy this address to your browser
'search window:https:https://www.campbellsci.com/videos/datalogger-programming

'CR1000 Series Datalogger
'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template
'Date:6/22/18
'Program author: TV, AC, CC

'Declare Constants
'Example:
'CONST PI = 3.141592654 or Const PI = 4*ATN(1)

'Declare Public Variables
'Example:
Public PTempC 'datalogger temp
Public AirTempC 'air temp from thermocouple in C
Public AirTempF ' " in F
Public MaxTemp 'Max temp used as trigger to turn light on
Public MinTemp 'Min temp used as trigger to turn light on
Public TempDiff ' difference between airtemp and logger temp in C
Public LightOn As Boolean 'used to indicate whether light should be on or off
Public ManualLightOn As Boolean 'used as a manual trigger if user wants the light on even if temp isn't over threshold
Public MaxLightOn As Boolean 'flag to indicate the light is on due to the max threshold

'Define Data Tables.
DataTable (Temp,True,-1 )
  DataInterval (0,5,min,10)
  Minimum (1,PTempC,FP2,False,False)
  Maximum (1,PTempC,FP2,False,False)
  Average (1,AirTempC,FP2,False)
  Sample (1,AirTempC,FP2)
  Sample (1,AirTempF,FP2)
  Sample (1,LightOn,Boolean)
EndTable 

'Define Subroutines
'_________________________Get the Air Temp from the Thermocouple_________________
Sub (GetAirTemp)
  TCDiff (AirTempC,1,AutoRange,1,TypeK,PTempC,True ,0,_60Hz,1.0,0) 'the TCDiff instruction is to take a thermocouple measurement. Right-click "TCDiff" to access the help section/insert function.
EndSub

'___________________Calculate Temp F from Thermocouple data ________________________  
Sub CalcF
  AirTempF = AirTempC * 1.8 + 32 'convert the airtemp from the thermocouple to degF. This can also be done in the TCDiff function using the "Multiplier" and "Offset"
EndSub

'_____________________Calculate difference between Datalogger panel temp and air temp__________________
Sub CalcDiff
  TempDiff = AirTempC - PTempC 'Calculate a difference between the air temp and the datalogger temp.
EndSub

'_____________________Turn the light on based on the temp threshold______________________________
Sub TurnLightOn
  If AirTempF <= MaxTemp AND AirTempF >= MinTemp Then 'if my temp in degF is greater than or equal to the value I set as my "MaxTemp" then
    PortSet (9,1) 'turn the light on. PortSet turns allows the user to turn a "C" port (1-8) or the Switching 12V port (9), to a "high" state (on, 1) or a "low" (off, 0)
    MaxLightOn = True 'then indicate with a flag that the light is on due to temp reaching the max threshold
    LightOn = True 'indicate that the light is on <- two are necessary for something below, hopefully you'll see why
    Else 'otherwise (AirTempF is less than MaxTemp)
    PortSet (9,0) 'turn the port to a low stat (turn the light off)
    MaxLightOn = False 'indicate that the max temp threshold is not met/light is off
    LightOn = False 'indicate the light is off
  EndIf 'close the if...then statement
EndSub 'end the subroutine

'_________________________Turn the light on based on the user flipping the switch______________________
Sub ManLightOn
  If ManualLightOn = True Then 'if the user wants to turn the light on
    PortSet(9,1) 'turn the SW12 port on
    LightOn = True 'indicate the light is turned on
  ElseIf ManualLightOn = False AND MaxLightOn = False Then 'if user doesn't want it manually turned on AND the temp hasn't reached the "Max" threshold
    PortSet(9,0) 'turn the SW12 port off
    LightOn = False 'indicate the light is off
  EndIf 'close statement
EndSub 'close subroutine
  

'Main Program
BeginProg
  MaxTemp = 80 'initially set the MaxTemp to a value (notice it's outside the "Scan" so it only sets it at the INITIAL compile. Otherwise, the user controls it.
	MinTemp = 75
Scan (10,Sec,0,0) 'set the scan interval
		PanelTemp (PTempC,60) 'PanelTemp is a built in instruction to measure the datalogger's internal temperature
		Call GetAirTemp 'call the subroutines
		Call CalcF
		Call CalcDiff
		Call TurnLightOn
		Call ManLightOn
		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable Temp 'Call the Table defined above.
	NextScan 'start the next scan (start time of the next scan is based on the interval defined above
 EndProg 'end the program

