'For programming tips, copy this address to your browser
'search window:https:https://www.campbellsci.com/videos/datalogger-programming

'CR1000 Series Datalogger
'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template
'Date: 20180622
'Program author: ALC

'Declare Constants
'Example:
'CONST PI = 3.141592654 or Const PI = 4*ATN(1)

'Declare Public Variables
'Example:
Public PTempC 'datalogger temp
Public AirTempC 'air temp from thermocouple in C
Public AirTempF ' " in F
Public MaxTemp 'Max temp used as trigger to turn light on
Public TempDiff ' difference between airtemp and logger temp in C
Public LightOn As Boolean 'used to indicate whether light should be on or off
Public ManualLightOn As Boolean 'used as a manual trigger if user wants the light on even if temp isn't over threshold
Public MaxLightOn As Boolean 'flag to indicate the light is on due to the max threshold

'Define Data Tables.
DataTable (Temp,True,-1 )
  DataInterval (0,5,min,10)'Added to 
  Minimum (1,PTempC,FP2,False,False)
  Maximum (1,PTempC,FP2,False,False)
  Average (1,AirTempC,FP2,False)
  Sample (1,AirTempC,FP2)
  Sample (1,AirTempF,FP2)
  Sample (1,LightOn,Boolean)
EndTable 

'Define Subroutines
'_________________________Get the Air Temp from the Thermocouple_________________
Sub (GetAirTemp)
  TCDiff (AirTempC,1,AutoRange,1,TypeK,PTempC,True ,0,_60Hz,1.0,0)
EndSub

'___________________Calculate Temp F from Thermocouple data ________________________  
Sub CalcF
  AirTempF = AirTempC * 1.8 + 32
EndSub

'_____________________Calculate difference between Datalogger panel temp and air temp__________________
Sub CalcDiff
  TempDiff = AirTempC - PTempC
EndSub

'_____________________Turn the light on based on the temp threshold______________________________
Sub TurnLightOn
  If AirTempF >= MaxTemp Then
    PortSet (9,1)
    MaxLightOn = True
    LightOn = True
    Else
    PortSet (9,0)
    MaxLightOn = False
    LightOn = False
  EndIf
EndSub

'_________________________Turn the light on based on the user flipping the switch______________________
Sub ManLightOn
  If ManualLightOn = True Then
    PortSet(9,1)
    LightOn = True
  ElseIf ManualLightOn = False AND MaxLightOn = False Then
    PortSet(9,0)
    LightOn = False
  EndIf
EndSub
  

'Main Program
BeginProg
  MaxTemp = 68
	Scan (10,Sec,0,0)
		PanelTemp (PTempC,60)
		Call GetAirTemp
		Call CalcF
		Call CalcDiff
		Call TurnLightOn
		Call ManLightOn
		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable Temp
	NextScan
EndProg

